PsychoPy2experiment version="3.0.7"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  color = $[-1,-1,-1]
  expName = Test
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Routines
  Routine trial
    ImageComponent ChoicePic
      image [set every repeat] = $Choice
      opacity [set every repeat] = 1
      ori [set every repeat] = 0
      pos [set every repeat] = (0, 0)
      size [set every repeat] = (1.3, 0.9)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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  Routine Choice2Gain
    TextComponent blank
      color [set every repeat] = $[-1.000,-1.000,-1.000]
      font [set every repeat] = Arial
      letterHeight [set every repeat] = 0.01
      pos [set every repeat] = (0, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = I
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    ImageComponent ChoicePic2
      image [set every repeat] = $Choice2
      opacity [set every repeat] = 1
      ori [set every repeat] = 0
      pos [set every repeat] = (0, 0)
      size [set every repeat] = (1.3, 0.9)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    KeyboardComponent resp
      allowedKeys [set every repeat] = 'left','right'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    ImageComponent checkL1
      color [set every repeat] = $[1,1,1]
      image [set every repeat] = check2.png
      mask [set every repeat] = None
      opacity [set every repeat] = 1
      ori [set every repeat] = 0
      pos [set every repeat] = (0, 0)
      size [set every repeat] = (2, 1)
      startVal [condition] = resp.keys == 'left'
      stopVal [duration (s)] = 1
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    ImageComponent checkR1
      color [set every repeat] = $[1,1,1]
      image [set every repeat] = check3.png
      mask [set every repeat] = None
      opacity [set every repeat] = 1
      ori [set every repeat] = 0
      pos [set every repeat] = (0, 0)
      size [set every repeat] = (2, 1)
      startVal [condition] = resp.keys == 'right'
      stopVal [duration (s)] = 1
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    CodeComponent code_4
      Code Type = Py
      Begin Experiment:
        from PIL import Image
        from psychopy import visual, core
      Each Frame:
        checkL1.autoLog=False
        checkR1.autoLog=False


        if resp.keys == 'left':
            checkL1.autoDraw=True

        #elif resp.keys == 'right':
         #   checkR1.autoDraw=False

        if resp.keys == 'right':
            checkR1.autoDraw=True


        if blank.status == FINISHED:
            checkR1.autoDraw=False
            checkL1.autoDraw=False
            continueRoutine=False
            #win.flip()


            #elif resp.keys == 'left':
         #   checkL1.autoDraw=False

        #clock = core.Clock()
        #while clock.getTime() < 2.0:
        #    if 0.5 <= clock.getTime() < 1.0:
         #       if checkL1.autoDraw==True:
          #          checkL1.setPhase(0.1, '+')
           #     elif checkR1.autoDraw==True:
            #        checkR1.setPhase(0.1, '+')
            #win.flip()
      End Routine:
        checkL1.autoLog=False
        checkR1.autoLog=False



        if resp.keys == 'left':
            checkL1.autoDraw=True

        #elif resp.keys == 'right':
         #   checkR1.autoDraw=False

        if resp.keys =='right':
            checkR1.autoDraw=True


        if blank.status == FINISHED:
            checkR1.autoDraw=False
            checkL1.autoDraw=False
            #win.flip()
        #elif resp.keys == 'left':
         #   checkL1.autoDraw=False


        #clock = core.Clock()
        #while clock.getTime() < 2.0:
         #   if 0.5 <= clock.getTime() < 1.0:
          #      if checkL1.autoDraw==True:
           #         checkL1.setPhase (0.1, '+')
            #    elif checkR1.autoDraw==True:
             #       checkR1.setPhase(0.1, '+')
            #win.flip()
  Routine ISI
    TextComponent iSi
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = +
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  Routine askAd
    TextComponent text_3
      letterHeight = 0.09
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      stopVal [condition] = Advice.status==STARTED
      text = Y                 N
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    TextComponent ask
      letterHeight = 0.05
      pos = (0, 0.11)
      startVal [time (s)] = 0.0
      stopVal [condition] = Advice.status==STARTED
      text = Would you like to hear advice from your financial advisor?
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    KeyboardComponent response
      allowedKeys = 'y','n'
      forceEndRoutine = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 4
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    CodeComponent code
      Code Type = Py
      Begin Routine:
        #advice = []

        #if key_resp_3.keys == 'left'
        #    advice = 'Advisor 1 says:', $AdviceVar


        #if key_resp_3.keys == 'right'
        #    advice = 'Advisor 2 says:', $AdviceVar
      Each Frame:
        if response.keys == 'y':
            continueRoutine = True
        elif response.keys == 'n':
            continueRoutine = False
      End Routine:
        if response.keys == 'y':
            continueRoutine = True
        elif response.keys == 'n':
            continueRoutine = False
    TextComponent Advice
      color [set every repeat] = white
      font [set every repeat] = Arial
      letterHeight [set every repeat] = 0.08
      pos [set every repeat] = (0, 0)
      startVal [condition] = response.keys=='y'
      stopVal [duration (s)] = 3
      text [set every repeat] = $AdviceVar
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  Routine preBlock
    TextComponent chooseInst
      letterHeight = 0.04
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = Please choose which person you would want to receive financial advice from, and then press enter.
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    TextComponent AdX
      letterHeight = 0.04
      pos = (-0.4, -0.05)
      startVal [time (s)] = 0.0
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      text:
          Advisor X: (Left Arrow)








        Adelphi University MBA student,
        interning at Chase Bank
    TextComponent AdY
      letterHeight = 0.04
      pos = (0.4, -0.05)
      startVal [time (s)] = 0.0
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      text:
        Advisor Y: (Right arrow)








        Adelphi University
        undergraduate biology major
    KeyboardComponent key_resp_3
      allowedKeys = 'left','right'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    ImageComponent AdXpic
      image = avatar_1.png
      pos = (-.4, -0.06)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    ImageComponent AdYpic
      image = avatar_2.png
      pos = (.4, -0.06)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    CodeComponent code_6
      Code Type = Py
      Begin Routine:
        border_right = visual.Circle(win,radius = 0.38, edges = 90,lineColor='green',lineColorSpace = 'rgb', fillColor = None, pos = (0.4, -0.09), opacity = 1, lineWidth = 5.0)
        border_left = visual.Circle(win,radius = 0.38, edges = 90,lineColor='green',lineColorSpace = 'rgb', fillColor = None, pos = (-0.4, -0.09), opacity = 1, lineWidth = 5.0)
      Each Frame:
        if key_resp_3.keys == 'left':
            border_left.autoDraw=True

        if key_resp_3.keys =='right':
            border_right.autoDraw=True

        if chooseInst.status == FINISHED:
            border_right.autoDraw = False
            border_left.autoDraw = False
      End Routine:
        if chooseInst.status == FINISHED:
            border_right.autoDraw = False
            border_left.autoDraw = False
    KeyboardComponent enter
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine inst
    TextComponent instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment!

        On the following page you will be instructed to choose an advisor.

        Press the space bar when you are ready to proceed.
    KeyboardComponent space
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Receive_money
    ImageComponent receiveMoneyPicture
      image [set every repeat] = $Amount
      opacity [set every repeat] = 1
      ori [set every repeat] = 0
      pos [set every repeat] = (0, -0.05)
      size [set every repeat] = (1.5, 1.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    TextComponent ISI2
      color [set every repeat] = white
      font [set every repeat] = Arial
      letterHeight [set every repeat] = 0.08
      pos [set every repeat] = (0, 0)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 2
      text [set every repeat] = +
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Flow
  Routine inst
  Routine preBlock
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Conditions.csv
    loopType = random
    nReps = 1
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    conditions:
      [{'Amount': 'C:\\Users\\farerilab\\Downloads\\GamblingAdviceTask\\IA50.bmp', 'Choice2': 'C:\\Users\\farerilab\\Downloads\\GamblingAdviceTask\\IA50_G10.bmp', 'AdviceVar': 'Advisor 1 says:\n\n"Go with the safe option here!"', 'Choice': 'C:\\Users\\farerilab\\Downloads\\GamblingAdviceTask\\IA50_G10.bmp'},
      {'Amount': 'C:\\Users\\farerilab\\Downloads\\GamblingAdviceTask\\IA50.bmp', 'Choice2': 'C:\\Users\\farerilab\\Downloads\\GamblingAdviceTask\\IA50_G20.bmp', 'AdviceVar': 'Advisor 1 says:\n\n"Let\'s take a risk!"', 'Choice': 'C:\\Users\\farerilab\\Downloads\\GamblingAdviceTask\\IA50_G20.bmp'},
      {'Amount': 'C:\\Users\\farerilab\\Downloads\\GamblingAdviceTask\\IA50.bmp', 'Choice2': 'C:\\Users\\farerilab\\Downloads\\GamblingAdviceTask\\IA50_G30.bmp', 'AdviceVar': 'Advisor 1 says:\n\n"I think you should gamble."', 'Choice': 'C:\\Users\\farerilab\\Downloads\\GamblingAdviceTask\\IA50_G30.bmp'},
      {'Amount': 'C:\\Users\\farerilab\\Downloads\\GamblingAdviceTask\\IA50.bmp', 'Choice2': 'C:\\Users\\farerilab\\Downloads\\GamblingAdviceTask\\IA50_G40.bmp', 'AdviceVar': 'Advisor 1 says:\n\n"It would probably be best to play it safe."', 'Choice': 'C:\\Users\\farerilab\\Downloads\\GamblingAdviceTask\\IA50_G40.bmp'},
      {'Amount': 'C:\\Users\\farerilab\\Downloads\\GamblingAdviceTask\\IA100.bmp', 'Choice2': 'C:\\Users\\farerilab\\Downloads\\GamblingAdviceTask\\IA100_G20.bmp', 'AdviceVar': 'Advisor 1 says:\n\n"Go ahead and gamble!"', 'Choice': 'C:\\Users\\farerilab\\Downloads\\GamblingAdviceTask\\IA100_G20.bmp'}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
    Routine ISI
    Routine Receive_money
    Routine trial
    Routine askAd
    Routine Choice2Gain
  LoopTerminator trials
